# Generated by Configurator on Tue May 06 14:26:37 EDT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,Multi Shutter,Utilities,Multi Shutter
Device,Flash4,HamamatsuHam,HamamatsuHam_DCAM
Device,TigerCommHub,ASITiger,TigerCommHub
Device,XYStage:XY:31,ASITiger,XYStage:XY:31
Device,ZStage:Z:32,ASITiger,ZStage:Z:32
Device,FilterSlider:S:32,ASITiger,FilterSlider:S:32
Device,LED:L:37:1,ASITiger,LED:L:37:1
Device,LED:L:37:2,ASITiger,LED:L:37:2
Device,LED:L:37:3,ASITiger,LED:L:37:3
Device,LED:L:37:4,ASITiger,LED:L:37:4
Device,CRISPAFocus:Z:32,ASITiger,CRISPAFocus:Z:32

# Pre-init settings for devices
Property,COM3,AnswerTimeout,5000.0000
Property,COM3,BaudRate,115200
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,TigerCommHub,Port,COM3

# Pre-init settings for COM ports

# Hub (parent) references
Parent,XYStage:XY:31,TigerCommHub
Parent,ZStage:Z:32,TigerCommHub
Parent,FilterSlider:S:32,TigerCommHub
Parent,LED:L:37:1,TigerCommHub
Parent,LED:L:37:2,TigerCommHub
Parent,LED:L:37:3,TigerCommHub
Parent,LED:L:37:4,TigerCommHub
Parent,CRISPAFocus:Z:32,TigerCommHub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,LED:L:37:1,50

# Focus directions
FocusDirection,ZStage:Z:32,0

# Roles
Property,Core,Camera,Flash4
Property,Core,Shutter,LED:L:37:1
Property,Core,Focus,ZStage:Z:32
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# FilterSlider:S:32
Label,FilterSlider:S:32,3,Position-4
Label,FilterSlider:S:32,2,Position-3
Label,FilterSlider:S:32,1,Position-2
Label,FilterSlider:S:32,0,Position-1

# Configuration presets
# Group: TransposeY
# Preset: NewPreset
ConfigGroup,TransposeY,NewPreset,XYStage:XY:31,TransposeMirrorY,1


# Group: TransposeX
# Preset: NewPreset
ConfigGroup,TransposeX,NewPreset,XYStage:XY:31,TransposeMirrorX,1


# Group: Channel
# Preset: TRITC
ConfigGroup,Channel,TRITC,FilterSlider:S:32,State,3
ConfigGroup,Channel,TRITC,Core,Shutter,LED:L:37:4

# Preset: FITC
ConfigGroup,Channel,FITC,FilterSlider:S:32,State,2
ConfigGroup,Channel,FITC,Core,Shutter,LED:L:37:3

# Preset: BF
ConfigGroup,Channel,BF,FilterSlider:S:32,State,0
ConfigGroup,Channel,BF,Core,Shutter,LED:L:37:1


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Core,AutoShutter,1
ConfigGroup,System,Startup,Core,Camera,Flash4
ConfigGroup,System,Startup,Core,ChannelGroup,Channel
ConfigGroup,System,Startup,Core,Focus,ZStage:Z:32
ConfigGroup,System,Startup,Core,Shutter,Multi Shutter
ConfigGroup,System,Startup,Core,XYStage,XYStage:XY:31
ConfigGroup,System,Startup,XYStage:XY:31,TransposeMirrorX,1
ConfigGroup,System,Startup,XYStage:XY:31,TransposeMirrorY,1
ConfigGroup,System,Startup,LED:L:37:1,LED Intensity(%),15
ConfigGroup,System,Startup,ZStage:Z:32,JoystickInput,23 - left wheel



# PixelSize settings
# Resolution preset: 10x
ConfigPixelSize,10x,Core,Camera,Flash4
PixelSize_um,10x,0.649
PixelSizeAffine,10x,-0.6491190065464209,-0.005016731133314058,0.0,-0.004834768006143339,0.6488980948814582,0.0
PixelSizeAngle_dxdz,10x,0.0
PixelSizeAngle_dydz,10x,0.0
PixelSizeOptimalZ_Um,10x,0.0
